PsychoPy2experiment version="2023.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = posner
  keyboardBackend = ioHub
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Routines
  Routine trial
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    ImageComponent cue
      image [set every repeat] = $cue_file
      size = (0.3, 0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.2
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    ImageComponent target
      image = pospix/bullseye.png
      pos [set every repeat] = $(target_x, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.7
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    MouseComponent resp
      clickable = target
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.7
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = posner.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'cue_file': 'pospix/left.png', 'target_x': -0.5, 'is_valid': 'valid'},
      {'cue_file': 'pospix/left.png', 'target_x': -0.5, 'is_valid': 'valid'},
      {'cue_file': 'pospix/left.png', 'target_x': -0.5, 'is_valid': 'valid'},
      {'cue_file': 'pospix/left.png', 'target_x': -0.5, 'is_valid': 'valid'},
      {'cue_file': 'pospix/right.png', 'target_x': 0.5, 'is_valid': 'valid'},
      {'cue_file': 'pospix/right.png', 'target_x': 0.5, 'is_valid': 'valid'},
      {'cue_file': 'pospix/right.png', 'target_x': 0.5, 'is_valid': 'valid'},
      {'cue_file': 'pospix/right.png', 'target_x': 0.5, 'is_valid': 'valid'},
      {'cue_file': 'pospix/left.png', 'target_x': 0.5, 'is_valid': 'invalid'},
      {'cue_file': 'pospix/right.png', 'target_x': -0.5, 'is_valid': 'invalid'}]
    Routine trial
  LoopTerminator trials
